// changelog March 2021
// Segmentation of fibers in 3D and fibrin mesh analysis using BoneJ functions

// changelog October 2022
// Use DAPI to segment nuclei and determine cytoplasm as a ring of X microns around
// Detect all neutrophil population using the red (Cy3) marker, and detect the percentage of N2-type neutrophils (anti-inflammatory) using the green (FITC) marker

function macroInfo(){
	
// "Histomorphometric 3D Analysis of Fibrin Mesh in Reflexion Confocal Images"
// * Target User: General
// *  

	scripttitle= "Histomorphometric 3D Analysis of Fibrin Mesh in Reflexion Confocal Images";
	version= "1.03";
	date= "2021";
	

// *  Tests Images:

	imageAdquisition="Confocal Reflexion Single Channel. Z Stack";
	imageType="8bit";  
	voxelSize="Voxel size:  unkown um xy";
	format="Format: czi ";   
 
 //*  GUI User Requierments:
 //*    - Choose parameters.
 //*    - Single File and Batch Mode
 //*    
 // Important Parameters: click Im or Dir + right button 
 
 	 
	parameter1="Introduce number of Slices in current ZStack"; 
	
			 
		
//  2 Action tools:
	buttom1="Fibrin: Single File processing";
	
//  OUTPUT

// Analyzed Images with ROIs
	
	excel="Quantification_FibrinMesh.xls";
	
	feature1="Image Label"; 
	feature2="Fiber Volume (um3)";
	feature3="Pore Volume (um3)";
	feature4="Fiber Density (%)";
	feature5="Fiber Thickness Avg (um)";
	feature6="Fiber Thickness Std (um)";
	feature7="Fiber Thickness Max (um)";
	feature8="Pore Diameter Avg (um)";
	feature8="Pore Diameter Std (um)";
	feature9="Pore Diameter Max (um)";
	feature10="Number of Fibers";
	feature11="Fiber Length Avg (um)";
	feature12="Fiber Length Std (um)";
	feature13="Fiber Length Min (um)";
	feature14="Fiber Length Max (um)";
	
/*  	  
 *  version: 1.02 
 *  Author: Mikel Ariz  
 *  Commented by: Tomas Muñoz 2023 
 *  Date : 2015
 *  
 */

//	MIT License
//	Copyright (c) 2023 Tomas Muñoz tmsantoro@unav.es
//	Permission is hereby granted, free of charge, to any person obtaining a copy
//	of this software and associated documentation files (the "Software"), to deal
//	in the Software without restriction, including without limitation the rights
//	to use, copy, modify, merge, publish, distribute, sublicense, and/or sell
//	copies of the Software, and to permit persons to whom the Software is
//	furnished to do so, subject to the following conditions:
//	The above copyright notice and this permission notice shall be included in all
//	copies or substantial portions of the Software.
//	THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND, EXPRESS OR
//	IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES OF MERCHANTABILITY,
//	FITNESS FOR A PARTICULAR PURPOSE AND NONINFRINGEMENT. IN NO EVENT SHALL THE
//	AUTHORS OR COPYRIGHT HOLDERS BE LIABLE FOR ANY CLAIM, DAMAGES OR OTHER
//	LIABILITY, WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE, ARISING FROM,
//	OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR OTHER DEALINGS IN THE
//	SOFTWARE.

	
	//image1="../templateImages/cartilage.jpg";
	//descriptionActionsTools="
	
	showMessage("ImageJ Script", "<html>"
		+"<style>h{margin-top: 5px; margin-bottom: 5px;} p{margin: 0px;padding: 0px;} ol{margin-left: 20px;padding: 5px;} #list-style-3 {list-style-type: circle;.container {max-width: 1200px; margin: 0 auto; padding: 0px; }</style>"
	    +"<h1><font size=6 color=Teal href=https://cima.cun.es/en/research/technology-platforms/image-platforms>CIMA: Imaging Platform</h1>"
	    +"<h1><font size=5 color=Purple><i>Software Development Service</i></h1>"
	    +"<p><font size=2 color=Purple><i>ImageJ Macros</i></p>"
	    +"<h2><font size=3 color=black>"+scripttitle+"</h2>"
	    +"<p><font size=2>Modified by Tomas Mu&ntilde;oz Santoro</p>"
	    +"<p><font size=2>Version: "+version+" ("+date+")</p>"
	    +"<p><font size=2> contact tmsantoro@unav.es</p>" 
	    +"<p><font size=2> Available for use/modification/sharing under the "+"<p4><a href=https://opensource.org/licenses/MIT/>MIT License</a></p>"
	    +"<h2><font size=3 color=black>Developed for</h2>"
	    +"<p><font size=3  i>Input Images</i></p>"
	    +"<ul id=list-style-3><font size=2  i><li>"+imageAdquisition +"</li><li>"+imageType+"</li><li>"+voxelSize+"</li><li>"+format+"</li></ul>"
	    +"<p><font size=3 i>Action tools (Buttons)</i></p>"
	    +"<ol><font size=2  i><li>"+buttom1+"</li></ol>"
	    +"<p><font size=3  i>PARAMETERS:  </i></p>"
	    +"<ul id=list-style-3><font size=2  i>"
	    +"<li>"+parameter1+"</li></ul>"
	    +"<p><font size=3  i>Quantification Results: </i></p>"
	    +"<p><font size=3 i>AnalyzedImages folder: Visualize Segmented Images</i></p>"
	    +"<p><font size=3  i>Excel "+excel+"</i></p>"
	    +"<ul id=list-style-3><font size=2  i><li>"+feature1+"</li><li>"+feature2+"</li><li>"+feature3+"</li><li>"+feature4+"</li>"
	    +"<li>"+feature5+"</li><li>"+feature6+"</li><li>"+feature7+"</li><li>"+feature8+"</li><li>"+feature9+"</li>"
	    +"<li>"+feature10+"</li><li>"+feature11+"</li><li>"+feature12+"</li><li>"+feature13+"</li><li>"+feature14+"</li></ul>"
	    +"<h0><font size=5></h0>"
	    +"");

}


var noOfSlices=30;	

macro "FibrinMesh Action Tool - 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"
{
	
	run("Close All");
		
	// Open file:
	name=File.openDialog("Select image to analyze");
	run("Bio-Formats Importer", "open=["+name+"] autoscale color_mode=Default rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT");
	
	
	roiManager("Reset");
	run("Clear Results");
	MyTitle=getTitle();
	output=getInfo("image.directory");
	
	OutDir = output+File.separator+"AnalyzedImages";
	File.makeDirectory(OutDir);
	
	aa = split(MyTitle,".");
	MyTitle_short = aa[0];
	
	run("Colors...", "foreground=black background=white selection=yellow");
	
	Stack.getDimensions(width, height, channels, slices, frames);
	
	waitForUser("Go to the first slice for the analysis and press OK");
	selectWindow(MyTitle);
	z1 = getSliceNumber();
	
	// SELECT A FIXED NUMBER OF SLICES IN AXIAL AXIS:
	z2 = z1+noOfSlices-1;
	
	//--We need to take one extra slice from each side because tubeness makes them black and we will remove them:
	if(z1!=1) {
		zz1 = z1-1;
		zz2 = z2+1;
	}
	else {
		zz1 = z1;
		zz2 = z2+2;
	}
	run("Slice Keeper", "first="+zz1+" last="+zz2+" increment=1");
	rename("all");
	selectWindow(MyTitle);
	close();
	rename("orig");
	
	
	///// IMAGE PREPROCESSING//////
	
	//--Background subtraction
	run("Subtract Background...", "rolling=10 stack");
	
	//--Steerable filter
	getVoxelSize(vx, vy, vz, unit);
	run("Tubeness", "sigma="+vx+" use");
	
	selectWindow("orig");
	close();
	selectWindow("tubeness of orig");
	rename("orig");
	
	//--Remove now first and last slices:
	setSlice(1);
	run("Delete Slice");
	setSlice(noOfSlices+1);
	run("Delete Slice");
	
	Stack.getDimensions(width, height, channels, slices, frames);
	//run("Duplicate...", "title=orig duplicate range=1-"+slices);
	setSlice(floor(slices/2));
	//run("Enhance Contrast", "saturated=0.35");
	
	//--Enhance contrast
	run("Enhance Contrast...", "saturated=0.3 process_all");
	
	//--Save preprocessed image
	selectWindow("orig");
	run("Green");
	saveAs("Tiff", OutDir+File.separator+MyTitle_short+"_Enhanced_"+noOfSlices+"slices.tif");
	wait(100);
	rename("orig");
	
									
	///// MASK GENERATION /////
	
	//--Ridge detection
	run("8-bit");
	run("Green");
	run("Clear Results");
	run("Ridge Detection", "line_width=2 high_contrast=100 low_contrast=10 estimate_width extend_line make_binary method_for_overlap_resolution=NONE sigma=1.08 lower_threshold=0.68 upper_threshold=6.97 minimum_line_length=2 maximum=0 stack");
					
	wait(100);				
	rename("meshSegmented");
	
	run("Analyze Skeleton (2D/3D)", "prune=none show");
	run("Clear Results");
	selectWindow("Branch information");
	IJ.renameResults("Results");
	selectWindow("Tagged skeleton");
	close();
	
	selectWindow("Results");
	nFibers = nResults;
	print(nFibers);
	selectWindow("Results");
	run("Summarize");
	wait(100);
	selectWindow("Results");
	fiberLength_avg = getResult("Branch length", nFibers);				
	fiberLength_std = getResult("Branch length", nFibers+1);				
	fiberLength_min = getResult("Branch length", nFibers+2);				
	fiberLength_max = getResult("Branch length", nFibers+3);
	//print(fiberLength_avg);				
	//print(fiberLength_std);				
	//print(fiberLength_min);				
	//print(fiberLength_max);
	
	
	//--Save binary segmentation image
	selectWindow("meshSegmented");
	saveAs("Tiff", OutDir+File.separator+MyTitle_short+"_Segmentation_"+noOfSlices+"slices.tif");
	wait(100);
	rename("meshSegmented");
	
					
	// IMAGE ANALYSIS: BoneJ
	
	run("Clear Results");
	
	//--Calculate volume fraction 
	selectWindow("meshSegmented");
	run("Analyze Regions 3D", "volume surface_area_method=[Crofton (13 dirs.)] euler_connectivity=C26");
	selectWindow("meshSegmented-morpho");
	IJ.renameResults("Results");
	FV = getResult("Volume", 0);			// fiber volume
	TV = (width*height*slices)*(vx*vy*vz);	// total image volume
	PV = TV-FV;								// pore volume
	FDen = FV/TV*100;						// fiber percentage in total volume
	
	run("Clear Results");
	
	// For Thickness measurements, we need isotropic voxels so we need to reslize Z to create cubic voxels:
	run("Reslice Z", "new="+vx);
	// We now need to binarize again:
	setThreshold(1, 255);
	run("Convert to Mask", "method=Otsu background=Light");
	
	//--Calculate Thickness (Legacy)
	run("Thickness", "thickness spacing");
	
	selectWindow("Resliced");
	close();
	
	//--Get Values
	selectWindow("Results");
	FbTh_avg=getResult("Tb.Th Mean (microns)",0);
	FbTh_std=getResult("Tb.Th Std Dev (microns)",0);
	FbTh_max=getResult("Tb.Th Max (microns)",0);
	TbSp_avg=getResult("Tb.Sp Mean (microns)",0);
	TbSp_std=getResult("Tb.Sp Std Dev (microns)",0);
	TbSp_max=getResult("Tb.Sp Max (microns)",0);
	
	
	//--Save results
	run("Clear Results");
	if(File.exists(output+File.separator+"Quantification_FibrinMesh.xls"))
	{	
		//if exists add and modify
		open(output+File.separator+"Quantification_FibrinMesh.xls");
		IJ.renameResults("Results");
	}
	i=nResults;
	setResult("Label", i, MyTitle); 
	setResult("Fiber Volume (um3)",i,FV);
	setResult("Pore Volume (um3)",i,PV);
	setResult("Fiber Density (%)",i,FDen);
	setResult("Fiber Thickness Avg (um)",i,FbTh_avg);
	setResult("Fiber Thickness Std (um)",i,FbTh_std);
	setResult("Fiber Thickness Max (um)",i,FbTh_max);
	setResult("Pore Diameter Avg (um)",i,TbSp_avg);
	setResult("Pore Diameter Std (um)",i,TbSp_std);
	setResult("Pore Diameter Max (um)",i,TbSp_max);
	setResult("Number of Fibers",i,nFibers);
	setResult("Fiber Length Avg (um)",i,fiberLength_avg);
	setResult("Fiber Length Std (um)",i,fiberLength_std);
	setResult("Fiber Length Min (um)",i,fiberLength_min);
	setResult("Fiber Length Max (um)",i,fiberLength_max);
	saveAs("Results", output+File.separator+"Quantification_FibrinMesh.xls");
	
	run("Synchronize Windows");
	
	selectWindow("orig");
	run("Remove Overlay");
	rename("meshEnhanced");
		 
	//Clear unused memory
	wait(500);
	run("Collect Garbage");
	
	showMessage("Fibrin mesh quantified!");
	
}



macro "FibrinMesh Action Tool Options" {
	Dialog.create("Parameters");
	Dialog.addMessage("Choose parameters")	
	Dialog.addNumber("Number of Z-slices to analyze", noOfSlices);		
	Dialog.show();	
	noOfSlices= Dialog.getNumber();			
}

