var r=20, grayscaleTol=10, enlargement=8, minTumorSection=10, sizeFacPerc=5, maxSlicesConverg=5;

macro "Tumor Action Tool 1 - C2b4T1b10IT4b10nTab10iTdb10t"
{

run("Close All");
name=File.openDialog("Select File");
open(name);

roiManager("Reset");
run("Clear Results");
MyTitle=getTitle();
fname=getInfo("image.directory");

print("Processing image "+MyTitle);

//output=getDirectory("Choose output directory for results file");// getInfo("image.directory");
outDir = fname+File.separator+"Results/";
File.makeDirectory(outDir);

aa = split(MyTitle,".");
MyTitle_short = aa[0];


//save info
print("\\Clear");
print(outDir);
print(MyTitle);
selectWindow("Log");
saveAs("Text",outDir+"imInfo.txt");
run("Close");	

r = getNumber("Enter voxel size (micron/pixel)", r);

Stack.getDimensions(width, height, channels, slices, frames);
run("Properties...", "channels=1 slices="+slices+" frames=1 unit=um pixel_width="+r+" pixel_height="+r+" voxel_depth="+r+" frame=[0 sec] origin=0,0");
setSlice(floor(slices/2));
//run("Enhance Contrast", "saturated=0.35");

rename("orig");
run("Set Measurements...", "area mean centroid redirect=None decimal=2");

showMessage("Image ready for tumor annotations!");

}


macro "Tumor Action Tool 2 - Ca3fT0b10AT6b10uTcb10tTfb10o" 
{

	Dialog.create("Parameters for the analysis");
	Dialog.addNumber("Grayscale tolerance for Level Sets", grayscaleTol);	
	Dialog.addNumber("ROI expansion between slices (px)", enlargement);	
	Dialog.addNumber("Minimum tumor section (px)", minTumorSection);	
	Dialog.addNumber("Tumor-growth tolerance between slices (%)", sizeFacPerc);	
	Dialog.addNumber("Max number of slices without convergence", maxSlicesConverg);		
	Dialog.show();	
	grayscaleTol= Dialog.getNumber();
	enlargement= Dialog.getNumber();
	min= Dialog.getNumber();	
	sizeFacPerc= Dialog.getNumber();
	maxSlicesConverg= Dialog.getNumber();

	// Calculate tumor-growth between slices as factor:
	sizeFac = 1+sizeFacPerc/100;
	
roiManager("Reset");
run("Clear Results");
run("Remove Overlay");

//get info of original image
selectWindow("orig");
wait(200);
Stack.getDimensions(width, height, channels, slices, frames);
getVoxelSize(rx, ry, rz, unit);
r=rx;	//the three are equal

fname=getInfo("image.directory");	
outDir = fname+File.separator+"Results/";

Fstring=File.openAsString(outDir+"imInfo.txt");
strA=split(Fstring,"\n");
temp=strA[0];
MyTitle=strA[1];

aa = split(MyTitle,".");
MyTitle_short = aa[0];

// Open already annotated tumors:
if(File.exists(outDir+MyTitle_short+"_Tumors.zip"))
{
	roiManager("Open", outDir+MyTitle_short+"_Tumors.zip");	
}

// Show them as overlays:
nn=roiManager("count");
if(nn>0) {
	roiManager("Show All with labels");
	run("From ROI Manager");
}


// ANNOTATE TUMOR IN ITS CENTRAL SLICE (WHERE THE TUMOR LOOKS BIGGER)

selectWindow("orig");
//setSlice(floor(slices/2));
setTool("oval");
waitForUser("Please go to the central slice of the tumor and draw an area surrounding it, close to the contour. Press OK when ready");
type=selectionType();
if (type==-1) {
	waitForUser("No selection has been drawn. Please go to the central slice of the tumor and draw an area surrounding it, close to the contour. Press OK when ready");
	type2=selectionType();
	if (type2==-1) {
		exit("No selection detected. No further action will be performed");
	}
}
roiManager("Add");		// ROI0 --> Initialization contour outside the tumor
s = getSliceNumber();	// Slice number of central slice of the tumor

// Save annotated tumors including current one:
roiManager("deselect");
roiManager("Save", outDir+MyTitle_short+"_Tumors.zip");	

// Delete previous ones and keep only current one:
nn=roiManager("count");
nTumor=nn;
while(nn>1) {
	roiManager("select", 0);
	roiManager("delete");
	nn=roiManager("count");
}
run("Remove Overlay");




setBatchMode(true);
run("Select All");
run("Duplicate...", "title=slice");
run("8-bit");
roiManager("Select", 0);
run("Set Scale...", "distance=0 known=0 unit=pixel");
run("Mean...", "radius=1");

//--Set a darker pixel inside to avoid level sets errors:
run("Clear Results");
run("Measure");
cx=getResult("X", 0);
cy=getResult("Y", 0);
ca=getResult("Area", 0);	//area of tumor from previous slice
cm=getResult("Mean", 0);	//mean gray value of the inside
setPixel(round(cx), round(cy), round(cm/2));	// set the pixel in the centroid to half the average intensity of the region (make it darker)
run("Clear Results");
	
//--Level Sets:
//--Inside-out:
//run("Level Sets", "method=[Active Contours] use_level_sets grey_value_threshold=50 distance_threshold=0.50 advection=1.50 propagation=1 curvature=1 grayscale=5 convergence=0.0050 region=outside");
//--Outside-in:
run("Level Sets", "method=[Active Contours] use_level_sets grey_value_threshold=50 distance_threshold=0.50 advection=0.8 propagation=1 curvature=2.5 grayscale="+grayscaleTol+" convergence=0.0100 region=inside");
//run("Level Sets", "method=[Active Contours] use_level_sets grey_value_threshold=50 distance_threshold=0.50 advection=0.8 propagation=1 curvature=2.5 grayscale=10 convergence=0.0100 region=inside");

run("Invert LUT");
run("Create Selection");
type=selectionType();
if (type==-1) {
	roiManager("Reset");
	roiManager("Open", outDir+MyTitle_short+"_Tumors.zip");	
	n=roiManager("count");
	roiManager("select", n-1);
	roiManager("delete");
	roiManager("deselect");
	n=roiManager("count");
	if(n>0) {
		roiManager("Save", outDir+MyTitle_short+"_Tumors.zip");	
	}
	else {
		File.delete(outDir+MyTitle_short+"_Tumors.zip");
	}
	selectWindow("orig");
	run("Select None");
	exit("The contour does not converge to a tumor. Please change initial contour or Level Sets parameters and run the program again, or quantify tumor manually");
}
roiManager("Add");
close();
selectWindow("Segmentation progress of slice");
close();
selectWindow("slice");
close();
selectWindow("orig");
roiManager("Select", 0);
roiManager("Delete");
roiManager("Select", 0);
roiManager("Add");
roiManager("Delete");		// ROI0 --> Contour of tumor in central slice, in original stack and with the associated slice number


//--GO DOWN IN THE SLICES

	//s=166;
sDown=s;	
cc=0;
ccConverg=0;
while(sDown>1)
{	
	sDown--;
	selectWindow("orig");
	setSlice(sDown);
	run("Duplicate...", "title=slice");
	run("8-bit");
	run("Set Scale...", "distance=0 known=0 unit=pixel");
	run("Mean...", "radius=1");
	run("Clear Results");
	
	//--Paint a darker pixel in the centroid in case the contour completely collapses to 0, to avoid Level Sets errors:
	roiManager("Select", cc);
	run("Measure");
	cx=getResult("X", 0);
	cy=getResult("Y", 0);
	ca=getResult("Area", 0);	//area of tumor from previous slice
	cm=getResult("Mean", 0);	//mean gray value of the inside
	setPixel(round(cx), round(cy), round(cm/2));	// set the pixel in the centroid to half the average intensity of the region (make it darker)
	
		//enlargement=8;
	run("Enlarge...", "enlarge="+enlargement+" pixel");

	//--Level Sets:
	//--Inside-out:
	//run("Level Sets", "method=[Active Contours] use_level_sets grey_value_threshold=50 distance_threshold=0.50 advection=1.50 propagation=1 curvature=1 grayscale=5 convergence=0.0050 region=outside");
	//--Outside-in:
	run("Level Sets", "method=[Active Contours] use_level_sets grey_value_threshold=50 distance_threshold=0.50 advection=0.8 propagation=1 curvature=2.5 grayscale="+grayscaleTol+" convergence=0.0100 region=inside");
	
	run("Invert LUT");
	run("Create Selection");
	run("Measure");
	Ac=getResult("Area", 1);
	type=selectionType();
	if (Ac<minTumorSection || type==-1 || ccConverg>maxSlicesConverg) {
		// If the contour converges to a very small region, tumor ends at this slice and we exit the loop
		selectWindow("Segmentation of slice");
		close();
		selectWindow("Segmentation progress of slice");
		close();
		selectWindow("slice");
		close();		
		break
	}

	//--Check size of converged contour. If it is bigger that the one in the previous slice, don't take it into account and repeat the previous one
	if(Ac>ca*sizeFac) {
		roiManager("Select", cc);
		ccConverg++;	// update counter of slices for which the contour is increasing
	}

	selectWindow("orig");
	run("Restore Selection");
	roiManager("Add");
	run("Select None");
	
	selectWindow("Segmentation of slice");
	close();
	selectWindow("Segmentation progress of slice");
	close();
	selectWindow("slice");
	close();

	cc++;	
}

//--Sort ROIs according to slices. That way, the last ROI will be the central slice of the tumor
roiManager("Sort");

//--GO UP IN THE SLICES

//s=166;
sUp=s;
ccConverg=0;
while(sUp<slices)
{	
	sUp++;
	selectWindow("orig");
	setSlice(sUp);
	run("Duplicate...", "title=slice");
	run("8-bit");
	run("Set Scale...", "distance=0 known=0 unit=pixel");
	run("Mean...", "radius=1");
	run("Clear Results");
	
	//--Paint a darker pixel in the centroid in case the contour completely collapses to 0, to avoid Level Sets errors:
	roiManager("Select", cc);
	run("Measure");
	cx=getResult("X", 0);
	cy=getResult("Y", 0);
	ca=getResult("Area", 0);	//area of tumor from previous slice
	cm=getResult("Mean", 0);	//mean gray value of the inside
	setPixel(round(cx), round(cy), round(cm/2));	// set the pixel in the centroid to half the average intensity of the region (make it darker)
	
		//enlargement=8;
	run("Enlarge...", "enlarge="+enlargement+" pixel");

	//--Level Sets:
	//--Inside-out:
	//run("Level Sets", "method=[Active Contours] use_level_sets grey_value_threshold=50 distance_threshold=0.50 advection=1.50 propagation=1 curvature=1 grayscale=5 convergence=0.0050 region=outside");
	//--Outside-in:
	run("Level Sets", "method=[Active Contours] use_level_sets grey_value_threshold=50 distance_threshold=0.50 advection=0.8 propagation=1 curvature=2.5 grayscale="+grayscaleTol+" convergence=0.0100 region=inside");
	
	run("Invert LUT");
	run("Create Selection");
	run("Measure");
	Ac=getResult("Area", 1);
	type=selectionType();
	if (Ac<minTumorSection || type==-1 || ccConverg>maxSlicesConverg) {
		// If the contour converges to a very small region, tumor ends at this slice and we exit the loop
		cc++;
		selectWindow("Segmentation of slice");
		close();
		selectWindow("Segmentation progress of slice");
		close();
		selectWindow("slice");
		close();		
		break
	}

	//--Check size of converged contour. If it is bigger that the one in the previous slice, don't take it into account and repeat the previous one
	if(Ac>ca*sizeFac) {
		roiManager("Select", cc);
		ccConverg++;	// update counter of slices for which the contour is increasing
	}

	selectWindow("orig");
	run("Restore Selection");
	roiManager("Add");
	run("Select None");
	
	selectWindow("Segmentation of slice");
	close();
	selectWindow("Segmentation progress of slice");
	close();
	selectWindow("slice");
	close();

	cc++;	
}


//--Show segmentation
selectWindow("orig");
roiManager("Show All with labels");
roiManager("Show All without labels");
roiManager("Show None");
run("From ROI Manager");


//--SAVE TUMOR MEASUREMENT

waitForUser("Check current tumor segmentation and press OK");
q=getBoolean("Would you like to save current tumor annotation measurements?", "Save", "Discard");
if(q) {

	//--Save tumor annotations
	roiManager("deselect");
	roiManager("Save", outDir+MyTitle_short+"_AnnotatedTumor_"+nTumor+".zip");	
	
	//--Measure tumor volume
	
	selectWindow("orig");
	run("Clear Results");
	n=roiManager("count");
	Aacc=0;
	for (i = 0; i < n; i++) {
		roiManager("Select", i);
		run("Measure");
		area=getResult("Area", i);
		Aacc = Aacc+area;
	}
	Vtumor = Aacc*r;	//multiply the accumulated area in mm2 by the Z of the voxel

	//--Calculate diameter for an equivalente sphere:
	base = 6*Vtumor/PI;
	exponent = 1/3;
	Deq = pow(base, exponent);
	
	roiManager("Deselect");
	run("Select None");
	setSlice(s);
	
	//--Write results
	run("Clear Results");	
	if(File.exists(outDir+"TumorMeasurements.xls"))
	{
		open(outDir+"TumorMeasurements.xls");
		IJ.renameResults("Results");
	}
	i=nResults;
	setResult("Label", i, MyTitle); 
	setResult("Tumor #", i, nTumor); 
	setResult("Tumor Volume (micron^3)",i,Vtumor);
	setResult("Tumor Equivalent Diameter (microns)",i,Deq);
	saveAs("Results", outDir+"TumorMeasurements.xls");
	
	showMessage("Tumor quantified and saved!");

}

else {	// delete tumor central annotation
	roiManager("Reset");
	roiManager("Open", outDir+MyTitle_short+"_Tumors.zip");	
	n=roiManager("count");
	roiManager("select", n-1);
	roiManager("delete");
	roiManager("deselect");
	n=roiManager("count");
	if(n>0) {
		roiManager("Save", outDir+MyTitle_short+"_Tumors.zip");	
	}
	else {
		File.delete(outDir+MyTitle_short+"_Tumors.zip");
	}
	selectWindow("orig");
	run("Select None");
	run("Remove Overlay");
	showMessage("Nothing has been saved!");
}


}


macro "Tumor Action Tool 3 - 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"
{

roiManager("Reset");
run("Clear Results");
run("Remove Overlay");

//get info of original image
selectWindow("orig");
wait(200);
Stack.getDimensions(width, height, channels, slices, frames);
getVoxelSize(rx, ry, rz, unit);
r=rx;	//the three are equal

fname=getInfo("image.directory");	
outDir = fname+File.separator+"Results/";

Fstring=File.openAsString(outDir+"imInfo.txt");
strA=split(Fstring,"\n");
temp=strA[0];
MyTitle=strA[1];

aa = split(MyTitle,".");
MyTitle_short = aa[0];

// Open already annotated tumors:
if(File.exists(outDir+MyTitle_short+"_Tumors.zip"))
{
	roiManager("Open", outDir+MyTitle_short+"_Tumors.zip");	
}

// Show them as overlays:
nn=roiManager("count");
nTumor = nn+1;
if(nn>0) {
	roiManager("Show All with labels");
	run("From ROI Manager");
}

roiManager("Reset");
run("ROI Manager...");
roiManager("Show None");
roiManager("Show All");
roiManager("Show All without labels");


//--MANUAL SEGMENTATION OF THE TUMOR
setTool("freehand");
waitForUser("Please annotate the tumor contour in a few reference slices (by pressing 'T'). Intermediate slices will be interpolated. Press OK when you finish the annotation");

run("Remove Overlay");
// Save current reference ROIs:
roiManager("Deselect");
roiManager("Sort");
roiManager("Save", outDir+MyTitle_short+"_RefROIs.zip");

// Interpolate intermediate ROIs
roiManager("Interpolate ROIs");
selectWindow("orig");
roiManager("Show All with labels");
roiManager("Show All without labels");
roiManager("Show None");
run("From ROI Manager");

// Check and finish or reannotate references
waitForUser("Please check the interpolated ROIs");
q=getBoolean("Would you like to finish the annotation process?","Finish annotation","Revise reference annotations");
if(!q) {
	run("Remove Overlay");
	roiManager("Reset");
	roiManager("Open", outDir+MyTitle_short+"_RefROIs.zip");
	roiManager("Show All with labels");
	roiManager("Show All without labels");
	waitForUser("Please draw additional annotations of the contour of the tumor (by pressing 'T'). Press OK when you finish to interpolate intermediate slices again");
	
	// Save current reference ROIs:
	roiManager("Deselect");
	roiManager("Sort");
	roiManager("Save", outDir+MyTitle_short+"_RefROIs.zip");

	// Interpolate intermediate ROIs
	roiManager("Interpolate ROIs");

	run("Remove Overlay");
	selectWindow("orig");
	roiManager("Show All with labels");
	roiManager("Show All without labels");
	roiManager("Show None");
	run("From ROI Manager");

	waitForUser("Please check the interpolated ROIs");
	q=getBoolean("Would you like to finish the annotation process?","Finish annotation","Revise reference annotations");
}

//--Show segmentation
selectWindow("orig");
roiManager("Show All with labels");
roiManager("Show All without labels");
roiManager("Show None");
run("From ROI Manager");


//--SAVE TUMOR MEASUREMENT

q=getBoolean("Would you like to save current tumor annotation measurements?", "Save", "Discard");
if(q) {

	//--Save tumor annotations
	roiManager("deselect");
	roiManager("Save", outDir+MyTitle_short+"_AnnotatedTumor_"+nTumor+".zip");	
	
	//--Measure tumor volume
	
	selectWindow("orig");
	run("Clear Results");
	n=roiManager("count");
	Aacc=0;
	for (i = 0; i < n; i++) {
		roiManager("Select", i);
		run("Measure");
		area=getResult("Area", i);
		Aacc = Aacc+area;
	}
	Vtumor = Aacc*r;	//multiply the accumulated area in mm2 by the Z of the voxel

	//--Calculate diameter for an equivalente sphere:
	base = 6*Vtumor/PI;
	exponent = 1/3;
	Deq = pow(base, exponent);
	
	roiManager("Deselect");
	run("Select None");

	//--Save annotated central slice
	centralSl = round(n/2);
	roiManager("Select", centralSl);
	roiManager("Save", outDir+MyTitle_short+"_TumorManualAnnot.roi");
	roiManager("reset");
	// Open already annotated tumors:
	if(File.exists(outDir+MyTitle_short+"_Tumors.zip"))
	{
		roiManager("Open", outDir+MyTitle_short+"_Tumors.zip");	
	}
	roiManager("Open", outDir+MyTitle_short+"_TumorManualAnnot.roi");
	roiManager("deselect");
	roiManager("Save", outDir+MyTitle_short+"_Tumors.zip");	
	nTumor=roiManager("count");
	run("Select None");
			
	//--Write results
	run("Clear Results");	
	if(File.exists(outDir+"TumorMeasurements.xls"))
	{
		open(outDir+"TumorMeasurements.xls");
		IJ.renameResults("Results");
	}
	i=nResults;
	setResult("Label", i, MyTitle); 
	setResult("Tumor #", i, nTumor); 
	setResult("Tumor Volume (micron^3)",i,Vtumor);
	setResult("Tumor Equivalent Diameter (microns)",i,Deq);
	saveAs("Results", outDir+"TumorMeasurements.xls");
		
	showMessage("Tumor quantified and saved!");

}

else {	// delete tumor central annotation
	roiManager("Reset");
	selectWindow("orig");
	run("Select None");
	run("Remove Overlay");
	showMessage("Nothing has been saved!");
}



}

































